<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:movenet="clr-namespace:Bonsai.TensorFlow.MoveNet;assembly=Bonsai.TensorFlow.MoveNet"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>0</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Flip">
          <cv:Mode>Horizontal</cv:Mode>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Camera</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="movenet:PredictSinglePoseThunder">
          <movenet:MinimumConfidence>0.2</movenet:MinimumConfidence>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Pose</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Pose</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="BodyPartName" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="movenet:GetBodyPart">
          <movenet:Name>nose</movenet:Name>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Position.X</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Rescale">
          <dsp:Min>0</dsp:Min>
          <dsp:Max>640</dsp:Max>
          <dsp:RangeMin>0</dsp:RangeMin>
          <dsp:RangeMax>1</dsp:RangeMax>
          <dsp:RescaleType>Linear</dsp:RescaleType>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Double.IsNaN(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>X</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Position.Y</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Rescale">
          <dsp:Min>0</dsp:Min>
          <dsp:Max>360</dsp:Max>
          <dsp:RangeMin>0</dsp:RangeMin>
          <dsp:RangeMax>1</dsp:RangeMax>
          <dsp:RescaleType>Linear</dsp:RescaleType>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Double.IsNaN(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Y</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:TextureResources">
          <gl:Textures>
            <gl:TextureConfiguration xsi:type="gl:Texture2D">
              <gl:Name>DynamicTexture</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
            </gl:TextureConfiguration>
          </gl:Textures>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:ShaderResources">
          <gl:Shaders />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
        <Left>-180</Left>
        <Right>180</Right>
        <Bottom>-90</Bottom>
        <Top>90</Top>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>DrawCall</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DrawCall</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:Scale">
          <gl:Order>Append</gl:Order>
          <gl:X>250</gl:X>
          <gl:Y>150</gl:Y>
          <gl:Z>1</gl:Z>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:UpdateUniform">
          <gl:UniformName>transform</gl:UniformName>
          <gl:ShaderName>Image</gl:ShaderName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:BindTexture">
          <gl:TextureSlot>Texture0</gl:TextureSlot>
          <gl:ShaderName>Image</gl:ShaderName>
          <gl:TextureName>DynamicTexture</gl:TextureName>
          <gl:TextureTarget>Texture2D</gl:TextureTarget>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:DrawMesh">
          <gl:ShaderName>Image</gl:ShaderName>
          <gl:MeshName>Plane</gl:MeshName>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Camera</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Flip">
          <cv:Mode>Vertical</cv:Mode>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Beautify</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Grayscale" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Threshold2" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Canny">
                <cv:Threshold1>40</cv:Threshold1>
                <cv:Threshold2>40</cv:Threshold2>
                <cv:ApertureSize>3</cv:ApertureSize>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:ConvertColor">
                <cv:Conversion>Gray2Bgr</cv:Conversion>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Smooth">
                <cv:SmoothType>Gaussian</cv:SmoothType>
                <cv:Size1>13</cv:Size1>
                <cv:Size2>0</cv:Size2>
                <cv:Sigma1>20</cv:Sigma1>
                <cv:Sigma2>0</cv:Sigma2>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Scale" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:ConvertScale">
                <dsp:Depth xsi:nil="true" />
                <dsp:Scale>1.5</dsp:Scale>
                <dsp:Shift>0</dsp:Shift>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="5" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="8" Label="Source1" />
            <Edge From="5" To="7" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>X</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="Multiply" />
      <Expression xsi:type="GroupWorkflow">
        <Name>BlueEdge</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Threshold1" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Canny">
                <cv:Threshold1>45.669291338582674</cv:Threshold1>
                <cv:Threshold2>32.614739023930809</cv:Threshold2>
                <cv:ApertureSize>3</cv:ApertureSize>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Sigma1" />
              <Property Name="Sigma2" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Smooth">
                <cv:SmoothType>Gaussian</cv:SmoothType>
                <cv:Size1>13</cv:Size1>
                <cv:Size2>0</cv:Size2>
                <cv:Sigma1>10</cv:Sigma1>
                <cv:Sigma2>5</cv:Sigma2>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:ConvertColor">
                <cv:Conversion>Gray2Bgr</cv:Conversion>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="ThresholdValue" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Threshold">
                <cv:ThresholdValue>86.338582677165363</cv:ThresholdValue>
                <cv:MaxValue>255</cv:MaxValue>
                <cv:ThresholdType>BinaryInv</cv:ThresholdType>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Mask">
                <cv:FillValue>
                  <cv:Val0>0</cv:Val0>
                  <cv:Val1>0</cv:Val1>
                  <cv:Val2>0</cv:Val2>
                  <cv:Val3>0</cv:Val3>
                </cv:FillValue>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="0" To="7" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="8" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>X</Name>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>1 - it</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="Multiply" />
      <Expression xsi:type="GroupWorkflow">
        <Name>Diff</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="ThresholdValue" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="AdaptationRate" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:BackgroundSubtraction">
                <cv:BackgroundFrames>1</cv:BackgroundFrames>
                <cv:AdaptationRate>0.5</cv:AdaptationRate>
                <cv:ThresholdValue>10</cv:ThresholdValue>
                <cv:ThresholdType>ToZero</cv:ThresholdType>
                <cv:SubtractionMethod>Absolute</cv:SubtractionMethod>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="3" Label="Source2" />
            <Edge From="2" To="3" Label="Source3" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Y</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="Multiply" />
      <Expression xsi:type="GroupWorkflow">
        <Name>AproxPoly</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Grayscale" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:AdaptiveThreshold">
                <cv:MaxValue>255</cv:MaxValue>
                <cv:AdaptiveMethod>MeanC</cv:AdaptiveMethod>
                <cv:ThresholdType>Binary</cv:ThresholdType>
                <cv:BlockSize>11</cv:BlockSize>
                <cv:Parameter>5</cv:Parameter>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:FindContours">
                <cv:Mode>List</cv:Mode>
                <cv:Method>ChainApproxNone</cv:Method>
                <cv:Offset>
                  <cv:X>0</cv:X>
                  <cv:Y>0</cv:Y>
                </cv:Offset>
                <cv:MinArea>100</cv:MinArea>
                <cv:MaxArea xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Eps" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:ApproximatePolygon">
                <cv:Method>DouglasPeucker</cv:Method>
                <cv:Eps>4.5669291338582676</cv:Eps>
                <cv:Recursive>true</cv:Recursive>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:DrawContours">
                <cv:MaxLevel>1</cv:MaxLevel>
                <cv:Thickness>-1</cv:Thickness>
              </Combinator>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:ConvertColor">
                <cv:Conversion>Gray2Bgr</cv:Conversion>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Size" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Resize">
                <cv:Size>
                  <cv:Width>51</cv:Width>
                  <cv:Height>38</cv:Height>
                </cv:Size>
                <cv:Interpolation>Linear</cv:Interpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Size" Selector="Width,Height" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Resize">
                <cv:Size>
                  <cv:Width>640</cv:Width>
                  <cv:Height>480</cv:Height>
                </cv:Size>
                <cv:Interpolation>NearestNeighbor</cv:Interpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="ThresholdValue" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Threshold">
                <cv:ThresholdValue>118.11023622047244</cv:ThresholdValue>
                <cv:MaxValue>255</cv:MaxValue>
                <cv:ThresholdType>Binary</cv:ThresholdType>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="BitwiseAnd" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="10" Label="Source1" />
            <Edge From="0" To="11" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="15" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="12" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="14" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source2" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Y</Name>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>1 - it</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="Multiply" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Add" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:UpdateTexture">
          <gl:TextureName>DynamicTexture</gl:TextureName>
          <gl:TextureTarget>Texture2D</gl:TextureTarget>
          <gl:InternalFormat>Rgba</gl:InternalFormat>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="8" Label="Source1" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="8" To="13" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="31" To="36" Label="Source1" />
      <Edge From="31" To="41" Label="Source1" />
      <Edge From="31" To="45" Label="Source1" />
      <Edge From="32" To="34" Label="Source1" />
      <Edge From="33" To="34" Label="Source2" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="50" Label="Source1" />
      <Edge From="36" To="39" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="38" To="39" Label="Source2" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="40" To="50" Label="Source2" />
      <Edge From="41" To="43" Label="Source1" />
      <Edge From="42" To="43" Label="Source2" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="44" To="50" Label="Source3" />
      <Edge From="45" To="48" Label="Source1" />
      <Edge From="46" To="47" Label="Source1" />
      <Edge From="47" To="48" Label="Source2" />
      <Edge From="48" To="49" Label="Source1" />
      <Edge From="49" To="50" Label="Source4" />
      <Edge From="50" To="51" Label="Source1" />
      <Edge From="51" To="52" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>