<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:al="clr-namespace:Bonsai.Audio;assembly=Bonsai.Audio"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="SubscribeSubject">
        <Name>Audio</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>RMS</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:ConvertScale">
                <dsp:Depth>F32</dsp:Depth>
                <dsp:Scale>1</dsp:Scale>
                <dsp:Shift>0</dsp:Shift>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Pow">
                <dsp:Power>2</dsp:Power>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:RunningAverage">
                <dsp:Alpha>0.2</dsp:Alpha>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Average" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Val0</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Pow">
                <dsp:Power>0.5</dsp:Power>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Loudness</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Image</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Loudness</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Rescale">
          <dsp:Min>0</dsp:Min>
          <dsp:Max>600</dsp:Max>
          <dsp:RangeMin>200</dsp:RangeMin>
          <dsp:RangeMax>10</dsp:RangeMax>
          <dsp:RescaleType>Clamp</dsp:RescaleType>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Threshold1" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Rescale">
          <dsp:Min>0</dsp:Min>
          <dsp:Max>600</dsp:Max>
          <dsp:RangeMin>400</dsp:RangeMin>
          <dsp:RangeMax>30</dsp:RangeMax>
          <dsp:RescaleType>Clamp</dsp:RescaleType>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Threshold2" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Canny">
          <cv:Threshold1>200</cv:Threshold1>
          <cv:Threshold2>400</cv:Threshold2>
          <cv:ApertureSize>3</cv:ApertureSize>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="10" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="5" To="8" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="10" Label="Source2" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source3" />
    </Edges>
  </Workflow>
</WorkflowBuilder>
