<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:al="clr-namespace:Bonsai.Audio;assembly=Bonsai.Audio"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="al:AudioCapture">
          <al:SampleRate>44100</al:SampleRate>
          <al:SampleFormat>Mono16</al:SampleFormat>
          <al:BufferLength>10</al:BufferLength>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:ConvertScale">
          <dsp:Depth>F32</dsp:Depth>
          <dsp:Scale>1</dsp:Scale>
          <dsp:Shift>0</dsp:Shift>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Pow">
          <dsp:Power>2</dsp:Power>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:RunningAverage">
          <dsp:Alpha>0.2</dsp:Alpha>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Average" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Pow">
          <dsp:Power>0.5</dsp:Power>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Loudness</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>0</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Loudness</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Rescale">
          <dsp:Min>0</dsp:Min>
          <dsp:Max>600</dsp:Max>
          <dsp:RangeMin>255</dsp:RangeMin>
          <dsp:RangeMax>0</dsp:RangeMax>
          <dsp:RescaleType>Clamp</dsp:RescaleType>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="ThresholdValue" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>128</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>Binary</cv:ThresholdType>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="13" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>
