<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:osc="clr-namespace:Bonsai.Osc;assembly=Bonsai.Osc"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="osc:CreateUdpClient">
          <osc:Name>Out</osc:Name>
          <osc:Port>0</osc:Port>
          <osc:RemoteHostName>127.0.0.1</osc:RemoteHostName>
          <osc:RemotePort>8000</osc:RemotePort>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Motion</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Rescale">
          <dsp:Min>0</dsp:Min>
          <dsp:Max>5000000</dsp:Max>
          <dsp:RangeMin>0</dsp:RangeMin>
          <dsp:RangeMax>1</dsp:RangeMax>
          <dsp:RescaleType>Clamp</dsp:RescaleType>
        </Combinator>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>Convert.ToSingle(it)</scr:Expression>
      </Expression>
      <Expression xsi:type="osc:SendMessage">
        <osc:Connection>Out</osc:Connection>
        <osc:Address>/br/motion</osc:Address>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Loudness</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Rescale">
          <dsp:Min>0</dsp:Min>
          <dsp:Max>2000</dsp:Max>
          <dsp:RangeMin>0</dsp:RangeMin>
          <dsp:RangeMax>1</dsp:RangeMax>
          <dsp:RescaleType>Clamp</dsp:RescaleType>
        </Combinator>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>Convert.ToSingle(it)</scr:Expression>
      </Expression>
      <Expression xsi:type="osc:SendMessage">
        <osc:Connection>Out</osc:Connection>
        <osc:Address>/br/state/activation</osc:Address>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>
